function drawshadowedtext(text, x, y) {
	setColor(0, 0, 0);	
	Overlay.drawString(text, x+1, y+1);
	setColor(255, 255, 255);	
	Overlay.drawString(text, x, y);
	updateDisplay();
}

function filterFilesByExtension(files, ext) {
  accepted = newArray(files.length);
  adx = 0;
	for (idx = 0; idx < files.length; ++idx) {
		filename = files[idx];
		if (endsWith(filename, ext)) {
		  accepted[adx] = filename;
		  adx += 1;
		}
	}

	return Array.slice(accepted, 0, adx);
}

function savewithlut(dir, filename, lut) {
	open(dir+filename);
	
	namenoext = substring(filename, 0, indexOf(filename, '.tif'));

	fontsize=14;
	setFont("SansSerif", fontsize, "bold");

	run(lut);
	run("Calibration Bar...", "location=[Upper Right] fill=White label=Black number=5 decimal=0 font=12 zoom=1 overlay");
	run("Scale Bar...", "width=1000 height=4 font=14 color=White background=None location=[Lower Right] bold overlay");
	drawshadowedtext(namenoext, 0, fontsize);
	
	wait(400);
	
	print("--> Saving with LUT="+lut);
	saveAs("PNG", dir  + namenoext+"-"+lut+".png");

	close();	
}

function action(dir, filename) {
	print("Processing "+filename);
	
	if (endsWith(dir, File.separator) == false) {
		dir += File.separator;
	}

	open(dir+filename);	
	getPixelSize(unit, pw, ph, pd);
	
	unitchanged = false;
	if (unit == "cm") {
		print("--> Converting from cm to um");
		pw *= 10*1000;
		ph *= 10*1000;
		unitchanged = true;
	} else if (unit == "inch") {
	  print("--> Converting from inch to um");
	  pw *= 25.4*1000;
    ph *= 25.4*1000;
    unitchanged = true;
  }

  if (unitchanged == true) {
		setVoxelSize(pw, ph, 0, "um");
		save(dir+filename);
	}

	close();
	
	savewithlut(dir, filename, "Fire");
	savewithlut(dir, filename, "ICA");
}

//action(getInfo("image.directory"), getInfo("image.filename"));

macro "SIOS Post Action Tool - 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"{
	dir = getDirectory("Select directory containing SIOS TIFFs");
	files = getFileList(dir);
  tiffiles = filterFilesByExtension(files, '.tif');

	setBatchMode(true);
	
	for (idx = 0; idx < tiffiles.length; ++idx) {
    showProgress((idx+1)/tiffiles.length);
		filename = tiffiles[idx];
    action(dir, filename);
	}
	
	showMessage("Processing complete.")
}	
